PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '00000', 'session': '001', 'age': '99', 'gender': '', 'experimenter': 'MI'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  color = $[1,1,1]
  expName = vismem_search_builder_code
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Routines
  Routine trial
    CodeComponent shuffle_mempos
      Code Type = Auto->JS
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      Begin Experiment:
        # define possible coordinates for memorization screen
        x_pos = [-400, -300, -200, -100, 0, 100, 200, 300, 400]
        y_pos = [-200, -150, -100, -50, 0, 50, 100, 150, 200, 250]
        #opacVal = 0
        opacVal = [1, 1, 1, 1, 1, 1, 1, 1, 1]

        #generate random ID in Python
        random_ID = randint(0, 10000)
        #add generated ID to the data
        thisExp.addData('random_ID', random_ID)
      Begin Routine:
        # randomize stimulus positions at the start of each trial
        shuffle(x_pos)
        shuffle(y_pos)

        # When target is absent, set opacity to 0
        #if Tpres != None and Tpres == 0.0 :
        #    opacVal[4] = 0
        #elif  Tpres == 1.0 :
        #    opacVal[4] = 1

        # When distractor is absent, set opacity to 1
        if TARGET_NAME != 'blank.png':
            opacVal[0] = 1
        else:
            opacVal[0] = 0
        if D1 != 'blank.png':
            opacVal[1] = 1
        else:
            opacVal[1] = 0
        if D2 != 'blank.png':
            opacVal[2] = 1
        else:
            opacVal[2] = 0
        if D3 != 'blank.png':
            opacVal[3] = 1
        else:
            opacVal[3] = 0
        if D4 != 'blank.png':
            opacVal[4] = 1
        else:
            opacVal[4] = 0
        if D5 != 'blank.png':
            opacVal[5] = 1
        else:
            opacVal[5] = 0
        if D6 != 'blank.png':
            opacVal[6] = 1
        else:
            opacVal[6] = 0
        if D7 != 'blank.png':
            opacVal[7] = 1
        else:
            opacVal[7] = 0
        if D8 != 'blank.png':
            opacVal[8] = 1
        else:
            opacVal[8] = 0

        # target.setOpacity(Tpres, log=False)
        # print(frameDur)
    TextComponent memory
      color = red
      letterHeight = 0.03
      pos = (0, 0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
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      text:
        Memorise...
    ImageComponent target
      image [set every repeat] = $TARGET_MEM
      interpolate = nearest
      opacity [set every repeat] = opacVal[0]
      pos [set every repeat] = (x_pos[0], y_pos[0])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist1
      image [set every repeat] = $D1
      interpolate = nearest
      opacity [set every repeat] = opacVal[1]
      pos [set every repeat] = (x_pos[1], y_pos[1])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist2
      image [set every repeat] = $D2
      interpolate = nearest
      opacity [set every repeat] = opacVal[2]
      pos [set every repeat] = (x_pos[2], y_pos[2])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist3
      image [set every repeat] = $D3
      interpolate = nearest
      opacity [set every repeat] = opacVal[3]
      pos [set every repeat] = (x_pos[3], y_pos[3])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist4
      image [set every repeat] = $D4
      interpolate = nearest
      opacity [set every repeat] = opacVal[4]
      pos [set every repeat] = (x_pos[4], y_pos[4])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist5
      image [set every repeat] = $D5
      interpolate = nearest
      opacity [set every repeat] = opacVal[5]
      pos [set every repeat] = (x_pos[5], y_pos[5])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist6
      image [set every repeat] = $D6
      interpolate = nearest
      opacity [set every repeat] = opacVal[6]
      pos [set every repeat] = (x_pos[6], y_pos[6])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist7
      image [set every repeat] = $D7
      interpolate = nearest
      opacity [set every repeat] = opacVal[7]
      pos [set every repeat] = (x_pos[7], y_pos[7])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist8
      image [set every repeat] = $D8
      interpolate = nearest
      opacity [set every repeat] = opacVal[8]
      pos [set every repeat] = (x_pos[8], y_pos[8])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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  Routine Instruct
    TextComponent inst_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The next screen shown will require you to memorize the targets.

        This will be followed by a 'Search' screen,
        in which you will use the keys below to indicate if a target is present or absent.
        At most one of the targets will be present in the search screen.

        'M' ->present
        'V'  <-absent

        Ready? Press Space Bar
        to start
    KeyboardComponent proceed_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    PolygonComponent fixation_target
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      nVertices = 99
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent corrAns_reminder_text
      color = black
      letterHeight = 0.1
      pos = (0, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        Present: m

        Absent: v
    TextComponent memory_2
      color = red
      letterHeight = 0.03
      pos = (0, 0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        Memorise...
  Routine search
    TextComponent search_txt
      color = green
      letterHeight = 0.03
      pos = (0, 0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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      text:
        Search...
    ImageComponent search_img
      image [set every repeat] = $FILE_SEARCH_IMAGE
      interpolate = nearest
      opacity [set every repeat] = 1
      size = 0.8533
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'm','v','p'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      storeCorrect = True
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  Routine thanks
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        Perfo = 0
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin JS Experiment:
        Perfo = 0;
        msg = "doh!";
      Begin JS Routine:
        // Get all correct
        nCorr = 0;
        var eachResp;
        for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++)
        {
          nCorr += psychoJS.experiment._trialsData[eachResp]['key_resp.corr'];
        }
        Perfo = 100 * nCorr / psychoJS.experiment._trialsData.length;

        #msg = "Thanks for participating. Your performance was" + Perfo + "  out of 100. Well done!";
        msg = "Thanks for participating. Your performance was" + Perfo + "  out of 100. Well done!";
      Begin Routine:
        nCorr = trials.data['key_resp.corr'].sum() #.std(), .mean() also available
        Perfo = 100*trials.data['key_resp.corr'].mean()
        #meanRt = trials.data['key_resp.rt'].mean()
        #msg = "Thanks for participating. Your performance was %.2f out of 100. Well done!!" %(Perfo)
        msg = 'Thanks for participating. Your performance was %.2f out of 100. \
        Well done!! \
        PLEASE WRITE DOWN YOUR UNIQUE PARTICIPANT ID %.d \
        You will need it to run the second part of the experiment' %(Perfo)  %(random_ID)
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $msg
      units = height
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  Routine break_2
    CodeComponent code_break
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys == 'p':
            break_duration = 60
        else:
            break_duration = 0
    TextComponent text_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_duration
      text = Press 'Space Bar' to continue
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_duration
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  Routine blockend_msg
    CodeComponent block_everyNtrials_2
      Code Type = Auto->JS
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      Begin Experiment:
        ListBreaks = [2, 59, 89]
      Each Frame:
        if not trials.thisN in ListBreaks:
        #if trials.thisN % 3 != 0:
            continueRoutine = False
    TextComponent emap_screen_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of block

        Ready? Press Space Bar to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_search
    PolygonComponent fixation_target_2
      fillColor = $[0,1,0]
      lineColor = $[-1,-1,-1]
      nVertices = 99
      shape = triangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent corrAns_reminder_text_2
      color = black
      letterHeight = 0.1
      pos = (0, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        Present: m

        Absent: v
    TextComponent search_txt_2
      color = green
      letterHeight = 0.03
      pos = (0, 0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        Search...
  Routine consent1
    ImageComponent consent_1
      image = Slide1.jpg
      size = 0.8533
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.49)
      startVal [time (s)] = 0.0
      units = height
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      text:
        After reading, press Space to continue
  Routine consent1_2
    ImageComponent consent
      image = Slide2.jpg
      size = 0.8533
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      color = black
      letterHeight = 0.03
      pos = (0, -0.49)
      startVal [time (s)] = 0.0
      units = height
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      text:
        After reading, press Space to continue
  Routine consent1_3
    ImageComponent consent_2
      image = Slide3.jpg
      size = 0.8533
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_6
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.03
      pos = (0, -0.49)
      startVal [time (s)] = 0.0
      units = height
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      text:
        I consent (Y) I do not consent (Esc)
Flow
  Routine consent1
  Routine consent1_2
  Routine consent1_3
  Routine Instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Psychopy_Exp_Params_pilot.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('FILE_CMP_IMAGE', 'cmp_shelves_044_toys_003'), ('FILE_SEARCH_IMAGE', 'S1_shelves_044_toys_003.jpg'), ('TARGET', 1), ('TARGET_NAME', 'motorcycle341.png'), ('TARGET_MEM', 'motorcycle341.png'), ('D1', 'truck96.png'), ('D2', 'truck83.png'), ('D3', 'airplane19.png'), ('D4', 'blank.png'), ('D5', 'blank.png'), ('D6', 'blank.png'), ('D7', 'blank.png'), ('D8', 'blank.png'), ('CONTEXT', 1), ('VISUAL_SET_SIZE', 1), ('MEM_SET_SIZE', 4), ('stDur_Mem', 4), ('stDur_VS', 7), ('corrAns', 'm')]),
      OrderedDict([('FILE_CMP_IMAGE', 'cmp_building_028_person_014'), ('FILE_SEARCH_IMAGE', 'S1_building_028_person_014.jpg'), ('TARGET', 1), ('TARGET_NAME', 'person1293.png'), ('TARGET_MEM', 'person1293.png'), ('D1', 'person1501.png'), ('D2', 'person1447.png'), ('D3', 'person1485.png'), ('D4', 'blank.png'), ('D5', 'blank.png'), ('D6', 'blank.png'), ('D7', 'blank.png'), ('D8', 'blank.png'), ('CONTEXT', 1), ('VISUAL_SET_SIZE', 1), ('MEM_SET_SIZE', 4), ('stDur_Mem', 4), ('stDur_VS', 7), ('corrAns', 'm')]),
      OrderedDict([('FILE_CMP_IMAGE', 'cmp_building_018_cat_005'), ('FILE_SEARCH_IMAGE', 'S1_building_018_cat_005.jpg'), ('TARGET', 1), ('TARGET_NAME', 'cat1440.png'), ('TARGET_MEM', 'cat1440.png'), ('D1', 'cat1534.png'), ('D2', 'cat1396.png'), ('D3', 'cat1452.png'), ('D4', 'blank.png'), ('D5', 'blank.png'), ('D6', 'blank.png'), ('D7', 'blank.png'), ('D8', 'blank.png'), ('CONTEXT', 1), ('VISUAL_SET_SIZE', 1), ('MEM_SET_SIZE', 4), ('stDur_Mem', 4), ('stDur_VS', 7), ('corrAns', 'm')]),
      OrderedDict([('FILE_CMP_IMAGE', 'cmp_building_044_dog_012'), ('FILE_SEARCH_IMAGE', 'S1_building_044_dog_012.jpg'), ('TARGET', 1), ('TARGET_NAME', 'dog1544.png'), ('TARGET_MEM', 'dog1544.png'), ('D1', 'dog1543.png'), ('D2', 'dog1592.png'), ('D3', 'dog1560.png'), ('D4', 'blank.png'), ('D5', 'blank.png'), ('D6', 'blank.png'), ('D7', 'blank.png'), ('D8', 'blank.png'), ('CONTEXT', 1), ('VISUAL_SET_SIZE', 1), ('MEM_SET_SIZE', 4), ('stDur_Mem', 4), ('stDur_VS', 7), ('corrAns', 'm')])]
    Routine fixation
    Routine trial
    Routine fixation_search
    Routine search
    Routine break_2
  LoopTerminator trials
  Routine thanks
