PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '00000', 'age': '99'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  color = $[1,1,1]
  expName = vismem_search_builder_code
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Routines
  Routine trial
    CodeComponent shuffle_mempos
      Code Type = Both
      Begin Experiment:
        # define possible coordinates for memorization screen
        x_pos = [-400, -300, -200, -100, 0, 100, 200, 300, 400]
        y_pos = [-200, -150, -100, -50, 0, 50, 100, 150, 200, 250]
        #opacVal = 0
        opacVal = [1, 1, 1, 1, 1, 1, 1, 1, 1]

        #generate random ID in Python
        #random_ID = randint(0, 10000)
        #add generated ID to the data
        #thisExp.addData('random_ID', random_ID)
      Begin JS Experiment:
        x_pos = [(- 400), (- 300), (- 200), (- 100), 0, 100, 200, 300, 400];
        y_pos = [(- 200), (- 150), (- 100), (- 50), 0, 50, 100, 150, 200, 250];
        opacVal = [1, 1, 1, 1, 1, 1, 1, 1, 1];

        // random_ID = (Math.floor((Math.random() * ((10000 - 0) + 1))) + 0);
        // psychoJS.experiment.addData('random_ID', random_ID);
      Begin JS Routine:
        shuffle = function (a) {
            var j, x, i;
            for (i = a.length - 1; i > 0; i--) {
                j = Math.floor(Math.random() * (i + 1));
                x = a[i];
                a[i] = a[j];
                a[j] = x;
            }
            return a;
        }

        shuffle(x_pos);
        shuffle(y_pos);
        if ((TARGET_NAME !== "blank.png")) {
            opacVal[0] = 1;
        } else {
            opacVal[0] = 0;
        }
        if ((D1 !== "blank.png")) {
            opacVal[1] = 1;
        } else {
            opacVal[1] = 0;
        }
        if ((D2 !== "blank.png")) {
            opacVal[2] = 1;
        } else {
            opacVal[2] = 0;
        }
        if ((D3 !== "blank.png")) {
            opacVal[3] = 1;
        } else {
            opacVal[3] = 0;
        }
        if ((D4 !== "blank.png")) {
            opacVal[4] = 1;
        } else {
            opacVal[4] = 0;
        }
        if ((D5 !== "blank.png")) {
            opacVal[5] = 1;
        } else {
            opacVal[5] = 0;
        }
        if ((D6 !== "blank.png")) {
            opacVal[6] = 1;
        } else {
            opacVal[6] = 0;
        }
        if ((D7 !== "blank.png")) {
            opacVal[7] = 1;
        } else {
            opacVal[7] = 0;
        }
        if ((D8 !== "blank.png")) {
            opacVal[8] = 1;
        } else {
            opacVal[8] = 0;
        }
      Begin Routine:
        # randomize stimulus positions at the start of each trial
        shuffle(x_pos)
        shuffle(y_pos)

        # When target is absent, set opacity to 0
        #if Tpres != None and Tpres == 0.0 :
        #    opacVal[4] = 0
        #elif  Tpres == 1.0 :
        #    opacVal[4] = 1

        # When distractor is absent, set opacity to 1
        if TARGET_NAME != 'blank.png':
            opacVal[0] = 1
        else:
            opacVal[0] = 0
        if D1 != 'blank.png':
            opacVal[1] = 1
        else:
            opacVal[1] = 0
        if D2 != 'blank.png':
            opacVal[2] = 1
        else:
            opacVal[2] = 0
        if D3 != 'blank.png':
            opacVal[3] = 1
        else:
            opacVal[3] = 0
        if D4 != 'blank.png':
            opacVal[4] = 1
        else:
            opacVal[4] = 0
        if D5 != 'blank.png':
            opacVal[5] = 1
        else:
            opacVal[5] = 0
        if D6 != 'blank.png':
            opacVal[6] = 1
        else:
            opacVal[6] = 0
        if D7 != 'blank.png':
            opacVal[7] = 1
        else:
            opacVal[7] = 0
        if D8 != 'blank.png':
            opacVal[8] = 1
        else:
            opacVal[8] = 0

        # target.setOpacity(Tpres, log=False)
        # print(frameDur)
    TextComponent memory
      color = red
      letterHeight = 0.03
      pos = (0, 0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
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      text:
        Memorise...
    ImageComponent target
      image [set every repeat] = $TARGET_MEM
      interpolate = nearest
      opacity [set every repeat] = opacVal[0]
      pos [set every repeat] = (x_pos[0], y_pos[0])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist1
      image [set every repeat] = $D1
      interpolate = nearest
      opacity [set every repeat] = opacVal[1]
      pos [set every repeat] = (x_pos[1], y_pos[1])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist2
      image [set every repeat] = $D2
      interpolate = nearest
      opacity [set every repeat] = opacVal[2]
      pos [set every repeat] = (x_pos[2], y_pos[2])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist3
      image [set every repeat] = $D3
      interpolate = nearest
      opacity [set every repeat] = opacVal[3]
      pos [set every repeat] = (x_pos[3], y_pos[3])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist4
      image [set every repeat] = $D4
      interpolate = nearest
      opacity [set every repeat] = opacVal[4]
      pos [set every repeat] = (x_pos[4], y_pos[4])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist5
      image [set every repeat] = $D5
      interpolate = nearest
      opacity [set every repeat] = opacVal[5]
      pos [set every repeat] = (x_pos[5], y_pos[5])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist6
      image [set every repeat] = $D6
      interpolate = nearest
      opacity [set every repeat] = opacVal[6]
      pos [set every repeat] = (x_pos[6], y_pos[6])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist7
      image [set every repeat] = $D7
      interpolate = nearest
      opacity [set every repeat] = opacVal[7]
      pos [set every repeat] = (x_pos[7], y_pos[7])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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    ImageComponent dist8
      image [set every repeat] = $D8
      interpolate = nearest
      opacity [set every repeat] = opacVal[8]
      pos [set every repeat] = (x_pos[8], y_pos[8])
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stDur_Mem
      units = pix
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  Routine Instruct
    TextComponent inst_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The next screen shown will require you to memorize the targets.

        This will be followed by a 'Search' screen,
        in which you will use the keys below to indicate if a target is present or absent.
        At most one of the targets will be present in the search screen.

        'M' ->present
        'V'  <-absent

        Ready? Press 'S'
        to start
    KeyboardComponent proceed_key
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    PolygonComponent fixation_target
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      nVertices = 99
      shape = cross
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent corrAns_reminder_text
      color = black
      letterHeight = 0.1
      pos = (0, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        Present: m

        Absent: v
    TextComponent memory_2
      color = red
      letterHeight = 0.03
      pos = (0, 0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        Memorise...
  Routine search
    TextComponent search_txt
      color = green
      letterHeight = 0.03
      pos = (0, 0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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      text:
        Search...
    ImageComponent search_img
      image [set every repeat] = $FILE_SEARCH_IMAGE
      interpolate = nearest
      opacity [set every repeat] = 1
      size = 0.8533
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'm','v','p'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      storeCorrect = True
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  Routine thanks
    CodeComponent code
      Code Type = Both
      Begin Experiment:
        Perfo = 0
        msg='doh!'#if this comes up we forgot to update the msg!
      Begin JS Experiment:
        Perfo = 0;
        msg = "doh!";
      Begin JS Routine:
        // Get all correct
        nCorr = 0;
        var eachResp;
        for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++)
        {
          nCorr += psychoJS.experiment._trialsData[eachResp]['key_resp.corr'];
        }
        Perfo = 100 * nCorr / psychoJS.experiment._trialsData.length;

        // msg = "Thanks for participating. Your performance was" + Perfo + "   out of 100. Well done!";

        // msg = "ID" + random_ID + "important!";
        msg = "Thanks for participating.\
        Your performance was " + Perfo + "  out of 100. Well done! \n\n \
        PLEASE WRITE DOWN YOUR UNIQUE PARTICIPANT ID " + newID + "\n\n \
        You will need it to run the second part of the experiment. \n\n \
        To enter the draw to win an Amazon eVoucher of £20, please send an email to lpzmi@nottingham.ac.uk with subject 'draw' and in the email cut and paste the following phrase \n\
        'I participated in the study on EFVS77'\n\n \
        Press x to finish the experiment";
      Begin Routine:
        nCorr = trials.data['key_resp.corr'].sum() #.std(), .mean() also available
        Perfo = 100*trials.data['key_resp.corr'].mean()
        #meanRt = trials.data['key_resp.rt'].mean()
        #msg = "Thanks for participating. Your performance was %.2f out of 100. Well done!!" %(Perfo)
        msg = 'Thanks for participating. Your performance was %.2f out of 100. \
        Well done!! \n \
        PLEASE WRITE DOWN YOUR UNIQUE PARTICIPANT ID %i \n \
        You will need it to run the second part of the experiment \n \
        Press x to finish the experiment' % (Perfo, newID)
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      units = height
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    KeyboardComponent key_resp_end
      allowedKeys = 'x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
    CodeComponent code_break
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys == 'p':
            break_duration = 60
        else:
            break_duration = 0
    TextComponent text_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_duration
      text = Press 'Space Bar' to continue
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_duration
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  Routine blockend_msg
    CodeComponent block_everyNtrials_2
      Code Type = Auto->JS
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      Begin Experiment:
        ListBreaks = [2, 59, 89]
      Each Frame:
        if not trials.thisN in ListBreaks:
        #if trials.thisN % 3 != 0:
            continueRoutine = False
    TextComponent emap_screen_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of block

        Ready? Press Space Bar to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_search
    PolygonComponent fixation_target_2
      fillColor = $[0,1,0]
      lineColor = $[-1,-1,-1]
      nVertices = 99
      shape = triangle
      size = (20, 20)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent corrAns_reminder_text_2
      color = black
      letterHeight = 0.1
      pos = (0, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        Present: m

        Absent: v
    TextComponent search_txt_2
      color = green
      letterHeight = 0.03
      pos = (0, 0.44)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        Search...
  Routine consent1
    ImageComponent consent_1
      image = Slide1.png
      size = [1, 0.8533]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.49)
      startVal [time (s)] = 0.0
      units = height
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      text:
        After reading, press Space to continue
  Routine consent1_2
    ImageComponent consent
      image = Slide2.png
      size = [1, 0.8533]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      color = black
      letterHeight = 0.03
      pos = (0, -0.49)
      startVal [time (s)] = 0.0
      units = height
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      text:
        After reading, press Space to continue
  Routine consent1_3
    ImageComponent consent_2
      image = Slide3.png
      size = [1, 0.8533]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_6
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.03
      pos = (0, -0.49)
      startVal [time (s)] = 0.0
      units = height
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      text:
        I consent (Y) I do not consent (Esc)
  Routine setup
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        round = function(num, n=0) {
            return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }
    CodeComponent code_random
      Code Type = JS
      Begin JS Experiment:
        !function(a,b,c,d,e,f,g,h,i){function j(a){var b,c=a.length,e=this,f=0,g=e.i=e.j=0,h=e.S=[];for(c||(a=[c++]);d>f;)h[f]=f++;for(f=0;d>f;f++)h[f]=h[g=s&g+a[f%c]+(b=h[f])],h[g]=b;(e.g=function(a){for(var b,c=0,f=e.i,g=e.j,h=e.S;a--;)b=h[f=s&f+1],c=c*d+h[s&(h[f]=h[g=s&g+b])+(h[g]=b)];return e.i=f,e.j=g,c})(d)}function k(a,b){var c,d=[],e=typeof a;if(b&&"object"==e)for(c in a)try{d.push(k(a[c],b-1))}catch(f){}return d.length?d:"string"==e?a:a+"\0"}function l(a,b){for(var c,d=a+"",e=0;e<d.length;)b[s&e]=s&(c^=19*b[s&e])+d.charCodeAt(e++);return n(b)}function m(c){try{return o?n(o.randomBytes(d)):(a.crypto.getRandomValues(c=new Uint8Array(d)),n(c))}catch(e){return[+new Date,a,(c=a.navigator)&&c.plugins,a.screen,n(b)]}}function n(a){return String.fromCharCode.apply(0,a)}var o,p=c.pow(d,e),q=c.pow(2,f),r=2*q,s=d-1,t=c["seed"+i]=function(a,f,g){var h=[];f=1==f?{entropy:!0}:f||{};var o=l(k(f.entropy?[a,n(b)]:null==a?m():a,3),h),s=new j(h);return l(n(s.S),b),(f.pass||g||function(a,b,d){return d?(c[i]=a,b):a})(function(){for(var a=s.g(e),b=p,c=0;q>a;)a=(a+c)*d,b*=d,c=s.g(1);for(;a>=r;)a/=2,b/=2,c>>>=1;return(a+c)/b},o,"global"in f?f.global:this==c)};if(l(c[i](),b),g&&g.exports){g.exports=t;try{o=require("crypto")}catch(u){}}else h&&h.amd&&h(function(){return t})}(this,[],Math,256,6,52,"object"==typeof module&&module,"function"==typeof define&&define,"random");
    CodeComponent code_both
      Code Type = Both
      Begin Experiment:
        import random
        seedString = core.Clock()
        random.seed(seedString)
        randomnum1=random.random()
        random.seed(seedString)
        randomnum2=random.random()

        kb = keyboard.Keyboard()

        #generate random ID in Python
        random_ID = randint(0, 10000)
        #add generated ID to the data
        thisExp.addData('random_ID', random_ID)
        newID=random_ID
      Begin JS Experiment:
        seedString = Math.seedrandom();
        randomnum1 = Math.random();
        Math.seedrandom(seedString);
        randomnum2 = Math.random();
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});

        random_ID = (Math.floor((Math.random() * ((10000 - 0) + 1))) + 0);
        psychoJS.experiment.addData('random_ID', random_ID);

        if (expInfo['participant'] === '00000'){
            newID = random_ID;
        } else {
            newID = expInfo['participant']
        }
        console.log(newID);
    CodeComponent code_auto
      Code Type = Auto->JS
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      Begin Experiment:
        items = []
      Begin Routine:
        kb.clock.reset()  # when you want to start the timer from
        msg0="Welcome to the first part of the study!\n Your participant ID is: "+str(newID) + "\n\n Please write down this number \n Ready to start? Press the Y key when ready"
    ImageComponent contact_info1
      image = contact_info1.png
      pos = (0, -0.2)
      size = [0.9, 0.1]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_ini
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent consent_question
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg0
      units = norm
      wrapWidth = 1.5
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  Routine gender_q
    TextComponent gender_question
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In order to allow us to describe our sample, we would now like you to answer some demographic questions.

        What is your gender?

        Woman (W)
        Man(M)
        Non-binary (N)
        Different identity (D)
        Prefer not to say (P)
    KeyboardComponent Gender
      allowedKeys = 'w','m','n','d','p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  Routine consent1
  Routine consent1_2
  Routine consent1_3
  Routine gender_q
  Routine Instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Psychopy_Exp_Params.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('FILE_CMP_IMAGE', 'cmp_shelves_044_toys_003'), ('FILE_SEARCH_IMAGE', 'S1_shelves_044_toys_003.jpg'), ('TARGET', 1), ('TARGET_NAME', 'motorcycle341.png'), ('TARGET_MEM', 'motorcycle341.png'), ('D1', 'truck96.png'), ('D2', 'truck83.png'), ('D3', 'airplane19.png'), ('D4', 'blank.png'), ('D5', 'blank.png'), ('D6', 'blank.png'), ('D7', 'blank.png'), ('D8', 'blank.png'), ('CONTEXT', 1), ('VISUAL_SET_SIZE', 1), ('MEM_SET_SIZE', 4), ('stDur_Mem', 4), ('stDur_VS', 7), ('corrAns', 'm')]),
      OrderedDict([('FILE_CMP_IMAGE', 'cmp_building_028_person_014'), ('FILE_SEARCH_IMAGE', 'S1_building_028_person_014.jpg'), ('TARGET', 1), ('TARGET_NAME', 'person1293.png'), ('TARGET_MEM', 'person1293.png'), ('D1', 'person1501.png'), ('D2', 'person1447.png'), ('D3', 'person1485.png'), ('D4', 'blank.png'), ('D5', 'blank.png'), ('D6', 'blank.png'), ('D7', 'blank.png'), ('D8', 'blank.png'), ('CONTEXT', 1), ('VISUAL_SET_SIZE', 1), ('MEM_SET_SIZE', 4), ('stDur_Mem', 4), ('stDur_VS', 7), ('corrAns', 'm')]),
      OrderedDict([('FILE_CMP_IMAGE', 'cmp_building_018_cat_005'), ('FILE_SEARCH_IMAGE', 'S1_building_018_cat_005.jpg'), ('TARGET', 1), ('TARGET_NAME', 'cat1440.png'), ('TARGET_MEM', 'cat1440.png'), ('D1', 'cat1534.png'), ('D2', 'cat1396.png'), ('D3', 'cat1452.png'), ('D4', 'blank.png'), ('D5', 'blank.png'), ('D6', 'blank.png'), ('D7', 'blank.png'), ('D8', 'blank.png'), ('CONTEXT', 1), ('VISUAL_SET_SIZE', 1), ('MEM_SET_SIZE', 4), ('stDur_Mem', 4), ('stDur_VS', 7), ('corrAns', 'm')]),
      OrderedDict([('FILE_CMP_IMAGE', 'cmp_building_044_dog_012'), ('FILE_SEARCH_IMAGE', 'S1_building_044_dog_012.jpg'), ('TARGET', 1), ('TARGET_NAME', 'dog1544.png'), ('TARGET_MEM', 'dog1544.png'), ('D1', 'dog1543.png'), ('D2', 'dog1592.png'), ('D3', 'dog1560.png'), ('D4', 'blank.png'), ('D5', 'blank.png'), ('D6', 'blank.png'), ('D7', 'blank.png'), ('D8', 'blank.png'), ('CONTEXT', 1), ('VISUAL_SET_SIZE', 1), ('MEM_SET_SIZE', 4), ('stDur_Mem', 4), ('stDur_VS', 7), ('corrAns', 'm')])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
    Routine fixation
    Routine trial
    Routine fixation_search
    Routine search
    Routine break_2
  LoopTerminator trials
  Routine thanks
